PsychoPy2experiment version="3.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = Built_In_Display
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  color = $[0,0,0]
  colorSpace = hsv
  expName = Raven's progressive matrices
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Routines
  Routine trial
    ImageComponent RPM_image
      image [set every repeat] = $image_file
      saveStartStop = False
      size = (1,1)
      startVal [time (s)] = 0.0
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    KeyboardComponent RPM_key_resp
      allowedKeys = '1','2','3','4','5','6','7','8'
      correctAns = $correct
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
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    CodeComponent code
      Code Type = Py
      Begin Experiment:
        score = 0
        wrongAnswer = 0
      End Routine:
        if RPM_key_resp.corr == 1:
            thisExp.addData('score', 1)
            score = score + 1
            wrongAnswer = 0

        else:
            thisExp.addData('score', 0)
            wrongAnswer +=1
            if wrongAnswer == 3:
                trials.finished = True
  Routine instr
    TextComponent instr_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        During this task, you will see designs with a part left out.

        Decide which of the pieces below will complete the design.

        Press the number key for your choice.
    TextComponent cont_text
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to begin.
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    KeyboardComponent instr_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine thanks
    TextComponent thx_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Good work!

        You have completed this task.
    TextComponent thx_cont
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent thx_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine instr
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = RPM_items.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('index', 0), ('image_file', 'C:\\Users\\Jordan\\Documents\\Experiment Building\\7. Raven_s Progressive Matrices\\JPG Images\\1.jpg'), ('correct', 4)]),
      OrderedDict([('index', 1), ('image_file', 'C:\\Users\\Jordan\\Documents\\Experiment Building\\7. Raven_s Progressive Matrices\\JPG Images\\2.jpg'), ('correct', 5)]),
      OrderedDict([('index', 2), ('image_file', 'C:\\Users\\Jordan\\Documents\\Experiment Building\\7. Raven_s Progressive Matrices\\JPG Images\\3.jpg'), ('correct', 1)]),
      OrderedDict([('index', 3), ('image_file', 'C:\\Users\\Jordan\\Documents\\Experiment Building\\7. Raven_s Progressive Matrices\\JPG Images\\4.jpg'), ('correct', 2)]),
      OrderedDict([('index', 4), ('image_file', 'C:\\Users\\Jordan\\Documents\\Experiment Building\\7. Raven_s Progressive Matrices\\JPG Images\\5.jpg'), ('correct', 6)]),
      OrderedDict([('index', 5), ('image_file', 'C:\\Users\\Jordan\\Documents\\Experiment Building\\7. Raven_s Progressive Matrices\\JPG Images\\6.jpg'), ('correct', 3)]),
      OrderedDict([('index', 6), ('image_file', 'C:\\Users\\Jordan\\Documents\\Experiment Building\\7. Raven_s Progressive Matrices\\JPG Images\\7.jpg'), ('correct', 6)]),
      OrderedDict([('index', 7), ('image_file', 'C:\\Users\\Jordan\\Documents\\Experiment Building\\7. Raven_s Progressive Matrices\\JPG Images\\8.jpg'), ('correct', 2)]),
      OrderedDict([('index', 8), ('image_file', 'C:\\Users\\Jordan\\Documents\\Experiment Building\\7. Raven_s Progressive Matrices\\JPG Images\\9.jpg'), ('correct', 1)])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
    Routine trial
  LoopTerminator trials
  Routine thanks
